run("MIST", "gridwidth=29 gridheight=18 starttile=1 imagedir=E:\\FISH_images_processed\\20210926_seq1_AD_mouseBrain_processed\\registered\\cyc_1_cy3 filenamepattern=FocalStack_{ppp}.tif filenamepatterntype=SEQUENTIAL gridorigin=UR assemblefrommetadata=false assemblenooverlap=false globalpositionsfile=[] numberingpattern=HORIZONTALCOMBING startrow=0 startcol=0 extentwidth=29 extentheight=18 timeslices=0 istimeslicesenabled=false outputpath=E:\\FISH_images_processed\\20210926_seq1_AD_mouseBrain_processed\\stitched displaystitching=false outputfullimage=true outputmeta=true outputimgpyramid=false blendingmode=OVERLAY blendingalpha=NaN outfileprefix=img- programtype=AUTO numcputhreads=20 loadfftwplan=true savefftwplan=true fftwplantype=MEASURE fftwlibraryname=libfftw3 fftwlibraryfilename=libfftw3.dll planpath=[C:\\Program Files\\fiji-win64\\Fiji.app\\lib\\fftw\\fftPlans] fftwlibrarypath=[C:\\Program Files\\fiji-win64\\Fiji.app\\lib\\fftw] stagerepeatability=0 horizontaloverlap=NaN verticaloverlap=NaN numfftpeaks=0 overlapuncertainty=NaN isusedoubleprecision=false isusebioformats=false issuppressmodelwarningdialog=false isenablecudaexceptions=false translationrefinementmethod=SINGLE_HILL_CLIMB numtranslationrefinementstartpoints=16 headless=false loglevel=MANDATORY debuglevel=NONE");